PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': 'P', 'Study Name': '', 'Task Version (required to run)': '1 or 2', 'PRE/POST': 'Pre or Post'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = N-Back (New Version 2021)
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Routines
  Routine trial_proper
    TextComponent N_backD
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $LettersDisplayed
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $Correctness
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine Start_Code
    CodeComponent VersionCode
      Code Type = Auto->JS
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      Begin Experiment:
        TaskVersion = expInfo['Task Version (required to run)']

        TaskVersion = TaskVersion.replace(' ', '')

        if TaskVersion == '1':
                VersionSelection = 'Conditions/NbackMaster_v1.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v1.xlsx'

        if TaskVersion == '2':
                VersionSelection = 'Conditions/NbackMaster_v1.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v2.xlsx'
    CodeComponent MouseSet
      Code Type = Auto->JS
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      Begin Experiment:
        win.setMouseVisible(False)
    CodeComponent SetBlock
      Code Type = Auto->JS
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      Begin Experiment:
        BlockNo = 1
        PractNo = 1
  Routine Trial_ISI
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if InnerLoop.thisN == 0: # only on the first trial
            jitters = [1.01, 1.0162, 1.0224, 1.0286, 1.0348, 1.041, 1.0472, 1.0534,
        1.0596, 1.0658, 1.072, 1.0782, 1.0844, 1.0906, 1.0968,
        1.103, 1.1092, 1.1154, 1.1216, 1.1278, 1.134, 1.1402, 1.1464,
        1.1526, 1.1588, 1.165, 1.1712, 1.1774, 1.1836, 1.1898, 1.196,
        1.2022, 1.2084, 1.2146, 1.2208, 1.227, 1.2332, 1.2394, 1.2456, 1.2518,
        1.258, 1.2642, 1.2704, 1.2766, 1.2828, 1.289, 1.2952, 1.3014,
        1.3076, 1.3138, 1.32, 1.3262, 1.3324, 1.3386, 1.3448, 1.351,
        1.3572, 1.3634, 1.3696, 1.3758, 1.382, 1.3882, 1.3944, 1.4006,
        1.4068, 1.413, 1.4192, 1.4254, 1.4316, 1.4378, 1.444, 1.4502,
        1.4564, 1.4626, 1.4688, 1.475, 1.4812, 1.4874, 1.4936, 1.4998,
        1.506, 1.5122, 1.5184, 1.5246, 1.5308, 1.537, 1.5432, 1.5494,
        1.5556, 1.5618, 1.568, 1.5742, 1.5804, 1.5866, 1.5928, 1.599,
        1.6052, 1.6114, 1.6176, 1.6238, 1.63, 1.6362, 1.6424, 1.6486,
        1.6548, 1.661, 1.6672, 1.6734, 1.6796, 1.6858, 1.692, 1.6982,
        1.7044, 1.7106, 1.7168, 1.723, 1.7292, 1.7354, 1.7416, 1.7478,
        1.754, 1.7602, 1.7664, 1.7726, 1.7788, 1.785, 1.7912, 1.7974,
        1.8036, 1.8098, 1.816, 1.8222, 1.8284, 1.8346, 1.8408, 1.847,
        1.8532, 1.8594, 1.8656, 1.8718, 1.878, 1.8842, 1.8904, 1.8966,
        1.9028, 1.909, 1.9152, 1.9214, 1.9276, 1.9338, 1.94, 1.9462,
        1.9524, 1.9586, 1.9648, 1.971, 1.9772, 1.9834, 1.9896, 1.9958] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitter', current_jitter) # record in the data for this trial
    TextComponent ISI_Main
      color = black
      flip [set every repeat] = None
      letterHeight = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_jitter
      text [set every repeat] = +
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  Routine InstructionsTrial
    TextComponent MainInt1
      color = red
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
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    TextComponent MainInt2
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'spacebar' to begin.
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    KeyboardComponent InstructionPass
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        MainIns = ('Task Block: '+ str(BlockNo) + ' of 16')
    TextComponent Blocks1
      color = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.20)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainIns
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  Routine Adder
    CodeComponent Add
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
  Routine trial_practice
    TextComponent N_backP
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $LettersDisplayedP
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    KeyboardComponent KeyPractice
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrectnessP
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if KeyPractice.corr==1:
                PracticeFeedback = 'Correct'
                FeedbackColour = 'green'

        if KeyPractice.corr==0:
                PracticeFeedback = 'Incorrect'
                FeedbackColour = 'red'

        if KeyPractice.corr==0 and KeyPractice.keys== None:
                PracticeFeedback = 'Miss (too slow)'
                FeedbackColour = 'orange'
  Routine Practice_ISI
    CodeComponent ISIPractice
      Code Type = Auto->JS
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      Begin Routine:
        if InnerLoopPractice.thisN == 0: # only on the first trial
            jitters = [1.04, 1.065, 1.09, 1.115, 1.14, 1.165, 1.19,
        1.215, 1.24, 1.265, 1.29, 1.315, 1.34, 1.365, 1.39, 1.415,
        1.44, 1.465, 1.49, 1.515, 1.54, 1.565, 1.59, 1.615, 1.64,
        1.665, 1.69, 1.715, 1.74, 1.765, 1.79, 1.815, 1.84, 1.865,
        1.89, 1.915, 1.94, 1.965, 1.99, 2.015] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitterPractice', current_jitter) # record in the data for this trial
    TextComponent ISI_Pract_Fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_jitter
      text [set every repeat] = +
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  Routine PractAdder
    CodeComponent PractAddBlock
      Code Type = Auto->JS
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      Begin Routine:
        PractNo = PractNo + 1
  Routine InstructionsPractice
    TextComponent PractIn1
      color [set every repeat] = red
      letterHeight [set every repeat] = 0.05
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstructionsP
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    TextComponent PractIn2
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'spacebar' to begin.
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    KeyboardComponent PractInstructionPass
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        PractIns = ("Practice Block: " + str(PractNo) + " of 4")
    TextComponent PractBlock1
      color [set every repeat] = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.20)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PractIns
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  Routine StartExpInst
    CodeComponent TaskNoPrint
      Code Type = Auto->JS
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      Begin Routine:
        VersionT = ('This is the n-back task version '+'"'+ TaskVersion + '"'
        +'\n \n \n Please press spacebar to continue to the instructions.')
    TextComponent TaskVersionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $VersionT
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    KeyboardComponent InstrKey1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine MainInstru1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        During the n-back, you will see a series of letters appear on the screen. Only one letter will appear on screen at one time.

        You will need to press 'spacebar' on your keyboard according to rules you are given about the letters.

        Please press spacebar to continue.
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Maininstru2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The rules are different each time. For example, one rule will be to press the spacebar when you see a letter appear twice in a row. Please press spacebar as quickly and accurately as possible.

        During the task, letters are both uppercase and lowercase (e.g. E and e). Both uppercase and lowercase letters are treated as the same (i.e. E = e).

        Please press spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine MainInstru3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You will be alerted whenever a new rule is given during a break screen. When these rules appear, you may take a short break if needed.

        Before you begin the task, you will take part in some practice runs. These will give you feedback on whether responses are correct or incorrect.

        Please press spacebar to begin practice.
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine PracticeFeedbackRoutine
    TextComponent text_4
      color [set every repeat] = $FeedbackColour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $PracticeFeedback
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  Routine Transition
    TextComponent TransitionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have now completed the practice runs. Please take a break if required.

        Press spacebar to continue
    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Transition2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You will begin the main task on the next screen.

        Please keep in mind you will no longer receive visual feedback (i.e. correct/incorrect/miss) on the main task.

        Please press spacebar to begin the main task.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine EndOfExperiment
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        You have now completed the experiment. Thank you.

        Please inform the researcher.

        Press 'escape' to close this window.
Flow
  Routine Start_Code
  Routine StartExpInst
  Routine MainInstru1
  Routine Maininstru2
  Routine MainInstru3
  LoopInitiator practicetrials loopType="TrialHandler"
    conditionsFile = $PracticeSelection
    loopType = sequential
    nReps = 1
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    Routine InstructionsPractice
    LoopInitiator InnerLoopPractice loopType="TrialHandler"
      conditionsFile = $CondFileP
      loopType = sequential
      nReps = 1
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      Routine Practice_ISI
      Routine trial_practice
      Routine PracticeFeedbackRoutine
    LoopTerminator InnerLoopPractice
    Routine PractAdder
  LoopTerminator practicetrials
  Routine Transition
  Routine Transition2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = sequential
    nReps = 1
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    Routine InstructionsTrial
    LoopInitiator InnerLoop loopType="TrialHandler"
      conditionsFile = $CondFile
      loopType = sequential
      nReps = 1
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      Routine Trial_ISI
      Routine trial_proper
    LoopTerminator InnerLoop
    Routine Adder
  LoopTerminator trials
  Routine EndOfExperiment
