PsychoPy2experiment version="2022.2.5"
Settings
  Enable Escape = False
  Experiment info = {'participant': 'P0', 'Task Version (1 or 2)': '1', 'Pre or post': 'NA'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = N-Back for Neuroimaging
  keyboardBackend = ioHub
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Routines
  Routine trial_proper
    TextComponent N_backD
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayed
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2'
      correctAns = $Correctness
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    TextComponent Fixation
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.4
      text = ·
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    CodeComponent Trial_Timer
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('time_trialBegin', time_trialBegin)
        thisExp.addData('time_trialEnd', time_trialEnd)
  Routine Start_Code
    CodeComponent VersionCode
      Code Type = Auto->JS
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      Begin Experiment:
        TaskVersion = expInfo['Task Version (1 or 2)']

        TaskVersion = TaskVersion.replace(' ', '')

        if TaskVersion == '1':
                VersionSelection = 'Conditions/NbackMaster_v1.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v1.xlsx'

        if TaskVersion == '2':
                VersionSelection = 'Conditions/NbackMaster_v2.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v2.xlsx'
    CodeComponent MouseSet
      Code Type = Auto->JS
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      Begin Experiment:
        win.setMouseVisible(False)
    CodeComponent SetBlock
      Code Type = Auto->JS
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      Begin Experiment:
        BlockNo = 1
        PractNo = 1
  Routine InstructionsTrial
    TextComponent MainInt1
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text [set every repeat] = $Instructions
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    CodeComponent BlockCounter
      Code Type = Auto->JS
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      Begin Routine:
        MainIns = ('Block: '+ str(BlockNo) + ' / 16')
    TextComponent Blocks1
      color = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text [set every repeat] = $MainIns
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    CodeComponent Timer_Instructions
      Code Type = Auto->JS
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      Begin Routine:
        time_InstructionsBegin = globalClock.getTime()
      End Routine:
        time_InstructionsEnd = globalClock.getTime()

        thisExp.addData('time_InstructionsBegin', time_InstructionsBegin)
        thisExp.addData('time_InstructionsEnd', time_InstructionsEnd)
    TextComponent LeftText
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = Press 'left' when you see any other letter.
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  Routine trial_practice
    TextComponent N_backP
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayedP
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine Practice_ISI
    TextComponent ISI_Pract_Fixation
      color = 0.7255, 0.7255, 0.7255
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = ·
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine PractAdder
    CodeComponent PractAddBlock
      Code Type = Auto->JS
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      Begin Routine:
        PractNo = PractNo + 1
  Routine InstructionsPractice
    CodeComponent skip_practice
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            practicetrials.finished = True #break the loop
    TextComponent PractIn1
      color [set every repeat] = red
      letterHeight [set every repeat] = 0.05
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstructionsP
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    TextComponent PractIn2
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.35)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'left' or 'right' to begin.
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    KeyboardComponent PractInstructionPass
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        PractIns = ("Practice Block: " + str(PractNo) + " of 4")
    TextComponent PractBlock1
      color [set every repeat] = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PractIns
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  Routine StartExpInst
    CodeComponent TaskNoPrint
      Code Type = Auto->JS
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      Begin Routine:
        VersionT = ('This is the n-back task version '+''+ TaskVersion + ''
        +'\n \n \n Please press the left or right key to continue.')
    TextComponent TaskVersionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VersionT
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    KeyboardComponent InstrKey1
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent QuitChecker
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'q' in keys and 't' in keys:
                core.quit()
  Routine MainInstru1
    TextComponent Instructions1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, you will see a series of letters appear on the screen. Only one letter will appear at a time.

        You need to press the 'right' or 'left' key based on rules which change over time.

        Press 'left' or 'right' to continue.
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent QuitChecker_2
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'q' in keys and 't' in keys:
                core.quit()
  Routine Maininstru2
    TextComponent Instructions2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Press the 'right' key based on the rule (e.g letters appearing twice in a row).

        For other letters, press the 'left' key.

        Press 'left' or 'right' to continue.
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine MainInstru3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Before you begin the main task, you will complete practice. This will provide feedback on how accurate you are.

        Please press 'left' or 'right' to begin practice.
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
  Routine PracticeFeedbackRoutine
    TextComponent text_4
      color [set every repeat] = $FeedbackColour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $PracticeFeedback
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine Transition
    TextComponent TransitionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have now completed the practice runs. Please take a break if required.

        Keep in mind you not receive visual feedback (correct/incorrect/miss) in the main task.

        Press 'right' or 'left' to continue
    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine EndOfExperiment
    TextComponent EndExperimentText
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = You have now completed the experiment. Thank you.
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    CodeComponent End_Experiment_Timer
      Code Type = Auto->JS
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      Begin Routine:
        time_ExperimentEnd = globalClock.getTime()
        thisExp.addData('time_ExperimentEnd', time_ExperimentEnd)
  Routine MainInstru4
  Routine trial_practice_3
    TextComponent N_backP_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayedP
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    KeyboardComponent KeyPractice
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $CorrectnessP
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if KeyPractice.corr==1:
                PracticeFeedback = 'Correct'
                FeedbackColour = 'green'

        if KeyPractice.corr==0:
                PracticeFeedback = 'Incorrect'
                FeedbackColour = 'red'

        if KeyPractice.corr==0 and KeyPractice.keys== None:
                PracticeFeedback = 'Miss (too slow)'
                FeedbackColour = 'orange'
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
    TextComponent ISI
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = ·
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  Routine ScannerPrompt
    TextComponent Scanner_wait_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for the scanner...
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    KeyboardComponent Scanner_control
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Scan_Timer_1
      Code Type = Auto->JS
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      Begin Routine:
        time_ScannerPromptBegin = globalClock.getTime()
      End Routine:
        time_ScannerPromptEnd = globalClock.getTime()

        thisExp.addData('time_ScannerPromptBegin', time_ScannerPromptBegin)
        thisExp.addData('time_ScannerPromptEnd', time_ScannerPromptEnd)
  Routine TransitionISI
    TextComponent Transition_Fixation
      color = $[0.7255, 0.7255, 0.7255]
      flip [set every repeat] = None
      letterHeight = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = ·
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    CodeComponent TransitionTimer
      Code Type = Auto->JS
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      Begin Routine:
        time_TransitionBegin = globalClock.getTime()
      End Routine:
        time_TaskStartTimer = globalClock.getTime()

        thisExp.addData('time_TransitionBegin', time_TransitionBegin)
        thisExp.addData('time_TaskStartTimer', time_TaskStartTimer)
  Routine Trial_End
    TextComponent Trial_End_ISI
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ·
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    CodeComponent Trial_end_timer
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()
        thisExp.addData('time_trialEnd', time_trialEnd)
  Routine LeftButtonCheck
    TextComponent CheckText1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the 'left' button
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    KeyboardComponent key_resp_8
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine RightButtonCheck
    TextComponent CheckText2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the 'right' button
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    KeyboardComponent key_resp_9
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Adder_and_Baseline
    CodeComponent Add
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
    TextComponent FixationPoint
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = +
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    CodeComponent EndBlockTimer
      Code Type = Auto->JS
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      Begin Routine:
        time_RestBlockBegin = globalClock.getTime()
      End Routine:
        time_RestBlockEnd = globalClock.getTime()

        thisExp.addData('time_RestBlockBegin', time_RestBlockBegin)
        thisExp.addData('time_RestBlockEnd', time_RestBlockEnd)
    TextComponent PreInstrWarning2
      letterHeight = 0.05
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1
      text = !
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  Routine Initial_rest
    TextComponent Initial_rest_Fixation
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = +
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    CodeComponent Initial_rest_timer
      Code Type = Auto->JS
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      Begin Routine:
        time_InitialRestBegin = globalClock.getTime()
      End Routine:
        time_InitialRestEnd = globalClock.getTime()

        thisExp.addData('time_InitialRestBegin', time_InitialRestBegin)
        thisExp.addData('time_InitialRestEnd', time_InitialRestEnd)
    TextComponent PreInstrWarning
      letterHeight = 0.05
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1
      text = !
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  Routine TaskBlockEndTimer
    CodeComponent TaskBlockEndTimer_2
      Code Type = Auto->JS
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      End Routine:
        time_TaskBlockEnd = globalClock.getTime()

        thisExp.addData('time_TaskBlockEnd', time_TaskBlockEnd)
  Routine MainInstru3_2
  Routine Mainistru6
    TextComponent TransitionText2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You will begin the main task on the next screen.

        Press 'right' or 'left' to start the main task.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine Mainistru5
    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent Instructions3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Letters are uppercase (A,B,C) and lowercase (a,b,c).

        Treat uppercase and lowercase as the same (e.g., A = a).

        When you see a cross (+) it is a rest period.

        Press 'left' or 'right' to continue.
  Routine Mainistru4
    TextComponent TextInstru
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have 2s to press a key from when a letter appears.

        You must press the key before the next letter appears. Only the first press will be counted.

        Press 'left' or 'right' to continue.
    KeyboardComponent ContinueButton
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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Flow
  Routine Start_Code
  Routine StartExpInst
  Routine LeftButtonCheck
  Routine RightButtonCheck
  Routine LeftButtonCheck
  Routine MainInstru1
  Routine Maininstru2
  Routine Mainistru4
  Routine Mainistru5
  Routine Mainistru6
  LoopInitiator Prompt_Looper loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine ScannerPrompt
  LoopTerminator Prompt_Looper
  Routine Initial_rest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = sequential
    nReps = 1
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    Routine InstructionsTrial
    Routine TransitionISI
    LoopInitiator InnerLoop loopType="TrialHandler"
      conditionsFile = $CondFile
      loopType = sequential
      nReps = 1
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      Routine trial_proper
    LoopTerminator InnerLoop
    Routine TaskBlockEndTimer
    Routine Adder_and_Baseline
  LoopTerminator trials
  Routine EndOfExperiment
