PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'P0', 'Task Version (1 or 2)': '1', 'Pre or post': 'NA', 'Practice (mainonly, prctonly, and both)': 'mainonly'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = N-Back (Version 4 - 2023) Behavioural Version
  keyboardBackend = ioHub
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Routines
  Routine trial_proper
    TextComponent N_backD
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayed
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $Correctness
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    TextComponent Fixation
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.4
      text = ·
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  Routine Start_Code
    CodeComponent VersionCode
      Code Type = Auto->JS
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      Begin Experiment:
        TaskVersion = expInfo['Task Version (1 or 2)']

        TaskVersion = TaskVersion.replace(' ', '')

        if TaskVersion == '1':
                VersionSelection = 'Conditions/NbackMaster_v1.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v1.xlsx'

        if TaskVersion == '2':
                VersionSelection = 'Conditions/NbackMaster_v2.xlsx'
                PracticeSelection = 'Conditions/NbackMasterPract_v2.xlsx'

        PracticeState = expInfo['Practice (mainonly, prctonly, and both)']
    CodeComponent MouseSet
      Code Type = Auto->JS
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      Begin Experiment:
        win.setMouseVisible(False)
    CodeComponent SetBlock
      Code Type = Auto->JS
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      Begin Experiment:
        BlockNo = 1
        PractNo = 1
  Routine Trial_ISI
    TextComponent ISI_Main
      color = $[0.7255, 0.7255, 0.7255]
      flip [set every repeat] = None
      letterHeight = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = ·
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  Routine InstructionsTrial
    TextComponent MainInt1
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
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    TextComponent MainInt2
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.35)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'right' or 'left' to begin.
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    KeyboardComponent InstructionPass
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent TaskBlockNoSet
      Code Type = Auto->JS
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      Begin Routine:
        MainIns = ('Task Block: '+ str(BlockNo) + ' of 16')
    TextComponent Blocks1
      color = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.20)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainIns
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    TextComponent LeftText
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 'left' when you see any other letter.
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  Routine Adder
    CodeComponent Add
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
  Routine trial_practice
    TextComponent N_backP
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayedP
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine Practice_ISI
    TextComponent ISI_Pract_Fixation
      color = 0.7255, 0.7255, 0.7255
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = ·
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine PractAdder
    CodeComponent PractAddBlock
      Code Type = Auto->JS
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      Begin Routine:
        PractNo = PractNo + 1
  Routine InstructionsPractice
    CodeComponent skip_practice
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            practicetrials.finished = True #break the loop
    TextComponent PractIn1
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstructionsP
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    TextComponent PractIn2
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, -0.35)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'left' or 'right' to begin.
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    KeyboardComponent PractInstructionPass
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        PractIns = ("Practice Block: " + str(PractNo) + " of 4")
    TextComponent PractBlock1
      color [set every repeat] = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.00, 0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PractIns
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    TextComponent LeftText2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 'left' when you see any other letter.
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  Routine StartExpInst
    CodeComponent TaskNoPrint
      Code Type = Auto->JS
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      Begin Routine:
        VersionT = ('This is the n-back task version '+ TaskVersion)
    TextComponent TaskVersionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VersionT
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    KeyboardComponent InstrKey1
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent PressToContinueText
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'left' or 'right' to continue.
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  Routine MainInstru1
    TextComponent InstructionsText1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, you will see a series of letters appear on the screen. Only one letter will appear at a time.

        You need to press the 'right' or 'left' key based on rules which change over time.

        Press 'left' or 'right' to continue.
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine PracticeFeedbackRoutine
    TextComponent text_4
      color [set every repeat] = $FeedbackColour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $PracticeFeedback
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
  Routine Transition
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
    TextComponent TransitionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have now completed the practice runs. Please take a break if required.

        Keep in mind you not receive visual feedback (correct/incorrect/miss) in the main task.

        Press 'right' or 'left' to continue
    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine Transition2
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'prctonly':
            core.quit()
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You will begin the main task on the next screen.

        Please press 'right' or 'left' to start the main task.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine EndOfExperiment
    TextComponent EndOfExperimentText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        You have now completed the experiment. Thank you.

        Please inform the researcher.

        Press 'escape' to close this window.
  Routine MainInstru4
  Routine trial_practice_3
    TextComponent N_backP_2
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $LettersDisplayedP
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    KeyboardComponent KeyPractice
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $CorrectnessP
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    CodeComponent FeedbackRecord
      Code Type = Auto->JS
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      End Routine:
        if KeyPractice.corr==1:
                PracticeFeedback = 'Correct'
                FeedbackColour = 'green'

        if KeyPractice.corr==0:
                PracticeFeedback = 'Incorrect'
                FeedbackColour = 'red'

        if KeyPractice.corr==0 and KeyPractice.keys== None:
                PracticeFeedback = 'Miss (too slow)'
                FeedbackColour = 'orange'
    CodeComponent InstrSkipper
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
            InnerLoopPractice.finished = True #break the loop2
    TextComponent ISI
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.3
      text = ·
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  Routine LeftKeyCheck
    KeyboardComponent key_resp_8
      allowedKeys = 'left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent KeyChecker1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press the 'left' key.
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  Routine RightKeyCheck
    KeyboardComponent key_resp_9
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent KeyChecker2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press the 'right' key.
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  Routine Brief_ISI
    TextComponent Brief_ISI_P
      color = $[0.7255, 0.7255, 0.7255]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = ·
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  Routine MainInstru2
    TextComponent TextInstructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the 'right' key based on the rule (e.g letters appearing twice in a row).

        For other letters, press the 'left' key.

        Press 'left' or 'right' to continue.
    KeyboardComponent ContinueKey
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine MainInstru5
    TextComponent InstructionsText4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Before you begin the main task, you will complete practice. This will provide feedback on how accurate you are.

        Please press 'left' or 'right' to begin practice.
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent SkipChecker
      Code Type = Auto->JS
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      Begin Routine:
        if PracticeState == 'mainonly':
            continueRoutine = False #end the routine
  Routine MainInstru4_2
    TextComponent InstructionsText3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Letters are uppercase (A,B,C) and lowercase (a,b,c).

        Treat uppercase and lowercase as the same (e.g., A = a).

        Press 'left' or 'right' to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine Maininstru3
    TextComponent InstructionsText2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You have 2s to press a key from when a letter appears.

        You must press the key before the next letter appears. Only the first press will be counted.

        Press 'left' or 'right' to continue.
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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Flow
  Routine Start_Code
  Routine LeftKeyCheck
  Routine RightKeyCheck
  Routine StartExpInst
  Routine MainInstru1
  Routine MainInstru2
  Routine Maininstru3
  Routine MainInstru4_2
  Routine MainInstru5
  LoopInitiator practicetrials loopType="TrialHandler"
    conditionsFile = $PracticeSelection
    loopType = sequential
    nReps = 1
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    Routine InstructionsPractice
    Routine Brief_ISI
    LoopInitiator InnerLoopPractice loopType="TrialHandler"
      conditionsFile = $CondFileP
      loopType = sequential
      nReps = 1
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      Routine trial_practice_3
      Routine PracticeFeedbackRoutine
    LoopTerminator InnerLoopPractice
    Routine PractAdder
  LoopTerminator practicetrials
  Routine Transition
  Routine Transition2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = sequential
    nReps = 1
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    Routine InstructionsTrial
    Routine Brief_ISI
    LoopInitiator InnerLoop loopType="TrialHandler"
      conditionsFile = $CondFile
      loopType = sequential
      nReps = 1
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      Routine trial_proper
    LoopTerminator InnerLoop
    Routine Adder
  LoopTerminator trials
  Routine EndOfExperiment
